PsychoPy2experiment version="2021.1.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  color = $(-1.0000, -1.0000, -1.0000)
  expName = boundary
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Routines
  Routine trial
    CodeComponent code
      Code Type = Py
      Begin Experiment:
        win.mouseVisible = False
        import random
      Begin Routine:
        jit = random.uniform(-1,1)
      Each Frame:
        trials.addData('proSize', prob.size)
        trials.addData('stanSize', stan.size)
    PolygonComponent prob
      fillColor = $(0.0000, 0.0000, 0.0000)
      lineColor = $(0.0000, 0.0000, 0.0000)
      ori [set every repeat] = ori_pr
      pos [set every repeat] = (-posx, -posy)
      shape = triangle
      size [set every repeat] = (6*level+jit,6*level+jit)
      startVal [time (s)] = 1.0
      units = deg
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    PolygonComponent stan
      fillColor = $(0.0000, 0.0000, 0.0000)
      lineColor = $(0.0000, 0.0000, 0.0000)
      ori [set every repeat] = ori_st
      pos [set every repeat] = (posx, posy)
      shape = triangle
      size [set every repeat] = (6+jit, 6+jit)
      startVal [time (s)] = 1.0
      units = deg
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    PolygonComponent fix
      fillColor = $(0.0000, 0.0000, 0.0000)
      lineColor = $(0.0000, 0.0000, 0.0000)
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
      units = deg
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    KeyboardComponent key_resp
      allowedKeys = 'f','j',
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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  Routine trial2
    PolygonComponent pro
      fillColor = white
      shape = triangle
      size = (0.5, 0.5)
      startVal [time (s)] = 1
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = cond.csv
    loopType = random
    nReps = 5
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    conditions:
      [OrderedDict([('w', 6), ('h', 6), ('stan_posx', 6.75), ('stan_posy', 2.7), ('pro_posx', -6.75), ('pro_posy', -2.7), ('ori_st', 0), ('ori_pr', 0)]),
      OrderedDict([('w', 6), ('h', 6), ('stan_posx', 6.75), ('stan_posy', 2.7), ('pro_posx', -6.75), ('pro_posy', -2.7), ('ori_st', 180), ('ori_pr', 180)]),
      OrderedDict([('w', 6), ('h', 6), ('stan_posx', 6.75), ('stan_posy', 2.7), ('pro_posx', -6.75), ('pro_posy', -2.7), ('ori_st', 0), ('ori_pr', 180)]),
      OrderedDict([('w', 6), ('h', 6), ('stan_posx', 6.75), ('stan_posy', 2.7), ('pro_posx', -6.75), ('pro_posy', -2.7), ('ori_st', 180), ('ori_pr', 0)]),
      OrderedDict([('w', 6), ('h', 6), ('stan_posx', 6.75), ('stan_posy', -2.7), ('pro_posx', -6.75), ('pro_posy', 2.7), ('ori_st', 0), ('ori_pr', 0)]),
      OrderedDict([('w', 6), ('h', 6), ('stan_posx', 6.75), ('stan_posy', -2.7), ('pro_posx', -6.75), ('pro_posy', 2.7), ('ori_st', 180), ('ori_pr', 180)]),
      OrderedDict([('w', 6), ('h', 6), ('stan_posx', 6.75), ('stan_posy', -2.7), ('pro_posx', -6.75), ('pro_posy', 2.7), ('ori_st', 0), ('ori_pr', 180)]),
      OrderedDict([('w', 6), ('h', 6), ('stan_posx', 6.75), ('stan_posy', -2.7), ('pro_posx', -6.75), ('pro_posy', 2.7), ('ori_st', 180), ('ori_pr', 0)]),
      OrderedDict([('w', 6), ('h', 6), ('stan_posx', -6.75), ('stan_posy', 2.7), ('pro_posx', 6.75), ('pro_posy', -2.7), ('ori_st', 0), ('ori_pr', 0)]),
      OrderedDict([('w', 6), ('h', 6), ('stan_posx', -6.75), ('stan_posy', 2.7), ('pro_posx', 6.75), ('pro_posy', -2.7), ('ori_st', 180), ('ori_pr', 180)])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
    Routine trial
  LoopTerminator trials
