PsychoPy2experiment version="2021.1.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = $(-1.0000, -1.0000, -1.0000)
  expName = Demo
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Routines
  Routine trial
    CodeComponent code
      Code Type = Py
      Begin Experiment:
        win.mouseVisible = False
      Begin Routine:
        import random
        size = 0
        start_size = 1
      Each Frame:
        #size = (10*math.pow(10, 1/3))**t

        #指数関数に増加
        function = 9.7**(t-1)
        size = function
        #指数関数的に減少する
        size2 = -function
    TextComponent fix
      color = $(0.0000, 0.0000, 0.0000)
      letterHeight = 1.5
      pos = (0, 5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.75
      text = +
      units = deg
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    PolygonComponent polygon
      fillColor = $(0.0000, 0.0000, 0.0000)
      lineColor = $(0.0000, 0.0000, 0.0000)
      nVertices = 40
      pos = (-10, -5)
      shape = regular polygon...
      size [set every frame] = (size, size)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 0.75
      units = deg
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    PolygonComponent polygon_2
      fillColor = $(0.0000, 0.0000, 0.0000)
      lineColor = $(0.0000, 0.0000, 0.0000)
      nVertices = 40
      pos = (10, -5)
      shape = regular polygon...
      size [set every frame] = (11+ size2, 11 + size2)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 0.75
      units = deg
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  Routine inst
    TextComponent text
      color = $(0.0000, 0.0000, 0.0000)
      letterHeight = 1
      pos = (0, 5)
      startVal [time (s)] = 0.0
      units = deg
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      text:
        same = F
        different = J

        (space)
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine inst
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = demo.csv
    loopType = random
    nReps = 100
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    conditions:
      [OrderedDict([('start_size', 1), ('probe', -1.5)]),
      OrderedDict([('start_size', 1), ('probe', -1.0)]),
      OrderedDict([('start_size', 1), ('probe', -0.5)]),
      OrderedDict([('start_size', 1), ('probe', 0.0)]),
      OrderedDict([('start_size', 1), ('probe', 0.5)]),
      OrderedDict([('start_size', 1), ('probe', 1.0)]),
      OrderedDict([('start_size', 1), ('probe', 1.5)]),
      OrderedDict([('start_size', 10), ('probe', -1.5)]),
      OrderedDict([('start_size', 10), ('probe', -1.0)]),
      OrderedDict([('start_size', 10), ('probe', -0.5)]),
      OrderedDict([('start_size', 10), ('probe', 0.0)]),
      OrderedDict([('start_size', 10), ('probe', 0.5)]),
      OrderedDict([('start_size', 10), ('probe', 1.0)]),
      OrderedDict([('start_size', 10), ('probe', 1.5)])]
    Routine trial
  LoopTerminator trials
