PsychoPy2experiment version="2021.1.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = $(-1.0000, -1.0000, -1.0000)
  expName = RM_sample6
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Routines
  Routine inst
    TextComponent text
      color = $(0.0000, 0.0000, 0.0000)
      letterHeight = 1.5
      startVal [time (s)] = 0.0
      units = deg
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      text:
        same = "F"
        different ="J"

        (space)
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial
    CodeComponent code
      Code Type = Py
      Begin Experiment:
        win.mouseVisible = False
      Begin Routine:
        import random
        jit = random.uniform(-0.1,0.1)
        probe_size = probe + jit
      Each Frame:
        if start_size == 1:
         tau = 1+6*(t-1)

        else:
            tau = 10-6*(t-1)

        size = tau + jit
      End Routine:
        trials.addData("jitter",jit)
        trials.addData("start_size",size)
        trials.addData("probe_size",probe_size)
    TextComponent fix
      color = $(0.0000, 0.0000, 0.0000)
      letterHeight = 3
      pos = (0, 5)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.25
      text = +
      units = deg
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    PolygonComponent polygon
      fillColor = $(0.0000, 0.0000, 0.0000)
      lineColor = $(0.0000, 0.0000, 0.0000)
      nVertices = 40
      pos = (0, -5)
      shape = regular polygon...
      size [set every frame] = (size,size)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 0.75
      units = deg
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    KeyboardComponent key_resp_2
      allowedKeys = 'f','j'
      forceEndRoutine = True
      startVal [time (s)] = 2
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    TextComponent resp
      color = $(0.0000, 0.0000, 0.0000)
      letterHeight = 1.5
      pos = (0, 5)
      startVal [time (s)] = 2
      units = deg
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      text:
        same = F
        different =J
    PolygonComponent polygon_2
      fillColor = $(0.0000, 0.0000, 0.0000)
      lineColor = $(0.0000, 0.0000, 0.0000)
      nVertices = 40
      pos = (0, -5)
      shape = regular polygon...
      size [set every repeat] = (5.5+probe_size,5.5+probe_size)
      startVal [time (s)] = 2
      units = deg
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Flow
  Routine inst
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = cond.csv
    loopType = random
    nReps = 5
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    conditions:
      [OrderedDict([('start_size', 1), ('probe', -1.5)]),
      OrderedDict([('start_size', 1), ('probe', -1.0)]),
      OrderedDict([('start_size', 1), ('probe', -0.5)]),
      OrderedDict([('start_size', 1), ('probe', 0.0)]),
      OrderedDict([('start_size', 1), ('probe', 0.5)]),
      OrderedDict([('start_size', 1), ('probe', 1.0)]),
      OrderedDict([('start_size', 1), ('probe', 1.5)]),
      OrderedDict([('start_size', 10), ('probe', -1.5)]),
      OrderedDict([('start_size', 10), ('probe', -1.0)]),
      OrderedDict([('start_size', 10), ('probe', -0.5)]),
      OrderedDict([('start_size', 10), ('probe', 0.0)]),
      OrderedDict([('start_size', 10), ('probe', 0.5)]),
      OrderedDict([('start_size', 10), ('probe', 1.0)]),
      OrderedDict([('start_size', 10), ('probe', 1.5)])]
    Routine trial
  LoopTerminator trials
