PsychoPy2experiment version="2021.1.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  color = $(-1.0000, -1.0000, -1.0000)
  expName = toilet
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Routines
  Routine trial
    CodeComponent code
      Code Type = Py
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      Begin Experiment:
        win.mouseVisible = False
        import random
    PolygonComponent standard
      fillColor = $(0.0000, 0.0000, 0.0000)
      lineColor = $(0.0000, 0.0000, 0.0000)
      ori [set every repeat] = ori_st
      pos [set every repeat] = (xpos_st, 0)
      shape = triangle
      size = (4, 4)
      startVal [time (s)] = 1
      units = deg
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    PolygonComponent probe
      fillColor = $(0.0000, 0.0000, 0.0000)
      lineColor = $(0.0000, 0.0000, 0.0000)
      ori [set every repeat] = ori_pr
      pos [set every repeat] = (xpos_pr, 0)
      shape = triangle
      size [set every repeat] = (4*size,4*size)
      startVal [time (s)] = 1
      units = deg
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    TextComponent text
      color = $(0.0000, 0.0000, 0.0000)
      letterHeight = 1
      startVal [time (s)] = 0.5
      text = +
      units = deg
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    KeyboardComponent resp
      allowedKeys = 'f','j',
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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  Routine rest
    TextComponent text_2
      color = $(1.0000, 1.0000, 1.0000)
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Rest!
        Press space
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine inst
    TextComponent instr
      color = $(1.0000, 1.0000, 1.0000)
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Test Session

        Which is bigger?
        right -> "j"
        left -> "f"
        Press space
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine pra
    CodeComponent code_2
      Code Type = Py
      Begin Experiment:
        win.mouseVisible=False
    PolygonComponent standard_pra
      fillColor = $(0.0000, 0.0000, 0.0000)
      lineColor = $(0.0000, 0.0000, 0.0000)
      ori [set every repeat] = ori_st
      pos [set every repeat] = (xpos_st, 0)
      shape = triangle
      size = (4, 4)
      startVal [time (s)] = 1.0
      units = deg
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    PolygonComponent prove_pra
      fillColor = $(0.0000, 0.0000, 0.0000)
      lineColor = $(0.0000, 0.0000, 0.0000)
      ori [set every repeat] = ori_pr
      pos [set every repeat] = (xpos_pr, 0)
      shape = triangle
      size [set every repeat] = (4*size,4*size)
      startVal [time (s)] = 1.0
      units = deg
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    TextComponent fixation
      color = $(0.0000, 0.0000, 0.0000)
      letterHeight = 1
      startVal [time (s)] = 0.5
      text = +
      units = deg
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    KeyboardComponent resp_pra
      allowedKeys = 'f','j'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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  Routine wel
    TextComponent wel_pra
      color = $(1.0000, 1.0000, 1.0000)
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Practice Session

        Which is bigger?
        right -> "j"
        left -> "f"
        Press space
    KeyboardComponent resp_wel
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine rest2
  Routine end
    TextComponent text_3
      color = $(1.0000, 1.0000, 1.0000)
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        end

        thank you!
    KeyboardComponent key_resp_3
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine wel
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = pra.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('ori_st', 0), ('ori_pr', 0), ('xpos_st', -4), ('xpos_pr', 4), ('size', 0.85)]),
      OrderedDict([('ori_st', 0), ('ori_pr', 0), ('xpos_st', 4), ('xpos_pr', -4), ('size', 0.85)]),
      OrderedDict([('ori_st', 0), ('ori_pr', 0), ('xpos_st', -4), ('xpos_pr', 4), ('size', 1.15)]),
      OrderedDict([('ori_st', 0), ('ori_pr', 0), ('xpos_st', 4), ('xpos_pr', -4), ('size', 1.15)]),
      OrderedDict([('ori_st', 0), ('ori_pr', 180), ('xpos_st', -4), ('xpos_pr', 4), ('size', 0.85)]),
      OrderedDict([('ori_st', 0), ('ori_pr', 180), ('xpos_st', 4), ('xpos_pr', -4), ('size', 0.85)]),
      OrderedDict([('ori_st', 0), ('ori_pr', 180), ('xpos_st', -4), ('xpos_pr', 4), ('size', 1.15)]),
      OrderedDict([('ori_st', 0), ('ori_pr', 180), ('xpos_st', 4), ('xpos_pr', -4), ('size', 1.15)]),
      OrderedDict([('ori_st', 180), ('ori_pr', 180), ('xpos_st', -4), ('xpos_pr', 4), ('size', 0.85)]),
      OrderedDict([('ori_st', 180), ('ori_pr', 180), ('xpos_st', -4), ('xpos_pr', 4), ('size', 0.85)]),
      OrderedDict([('ori_st', 180), ('ori_pr', 180), ('xpos_st', -4), ('xpos_pr', 4), ('size', 1.15)]),
      OrderedDict([('ori_st', 180), ('ori_pr', 180), ('xpos_st', -4), ('xpos_pr', 4), ('size', 1.15)]),
      OrderedDict([('ori_st', 180), ('ori_pr', 0), ('xpos_st', -4), ('xpos_pr', 4), ('size', 0.85)]),
      OrderedDict([('ori_st', 180), ('ori_pr', 0), ('xpos_st', -4), ('xpos_pr', 4), ('size', 0.85)]),
      OrderedDict([('ori_st', 180), ('ori_pr', 0), ('xpos_st', -4), ('xpos_pr', 4), ('size', 1.15)])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
    Routine pra
  LoopTerminator trials_3
  LoopInitiator trials_2 loopType="TrialHandler"
    loopType = random
    nReps = 8
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    Routine inst
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = cond.csv
      loopType = random
      nReps = 2
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      conditions:
        [OrderedDict([('ori_st', 0), ('ori_pr', 0), ('xpos_st', -4), ('xpos_pr', 4), ('size', 0.94)]),
        OrderedDict([('ori_st', 0), ('ori_pr', 0), ('xpos_st', -4), ('xpos_pr', 4), ('size', 0.97)]),
        OrderedDict([('ori_st', 0), ('ori_pr', 0), ('xpos_st', -4), ('xpos_pr', 4), ('size', 1.0)]),
        OrderedDict([('ori_st', 0), ('ori_pr', 0), ('xpos_st', -4), ('xpos_pr', 4), ('size', 1.03)]),
        OrderedDict([('ori_st', 0), ('ori_pr', 0), ('xpos_st', -4), ('xpos_pr', 4), ('size', 1.06)]),
        OrderedDict([('ori_st', 0), ('ori_pr', 0), ('xpos_st', 4), ('xpos_pr', -4), ('size', 0.94)]),
        OrderedDict([('ori_st', 0), ('ori_pr', 0), ('xpos_st', 4), ('xpos_pr', -4), ('size', 0.97)]),
        OrderedDict([('ori_st', 0), ('ori_pr', 0), ('xpos_st', 4), ('xpos_pr', -4), ('size', 1.0)]),
        OrderedDict([('ori_st', 0), ('ori_pr', 0), ('xpos_st', 4), ('xpos_pr', -4), ('size', 1.03)]),
        OrderedDict([('ori_st', 0), ('ori_pr', 0), ('xpos_st', 4), ('xpos_pr', -4), ('size', 1.06)]),
        OrderedDict([('ori_st', 0), ('ori_pr', 180), ('xpos_st', -4), ('xpos_pr', 4), ('size', 0.94)]),
        OrderedDict([('ori_st', 0), ('ori_pr', 180), ('xpos_st', -4), ('xpos_pr', 4), ('size', 0.97)]),
        OrderedDict([('ori_st', 0), ('ori_pr', 180), ('xpos_st', -4), ('xpos_pr', 4), ('size', 1.0)]),
        OrderedDict([('ori_st', 0), ('ori_pr', 180), ('xpos_st', -4), ('xpos_pr', 4), ('size', 1.03)]),
        OrderedDict([('ori_st', 0), ('ori_pr', 180), ('xpos_st', -4), ('xpos_pr', 4), ('size', 1.06)]),
        OrderedDict([('ori_st', 0), ('ori_pr', 180), ('xpos_st', 4), ('xpos_pr', -4), ('size', 0.94)])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
      Routine trial
    LoopTerminator trials
    Routine rest
  LoopTerminator trials_2
  Routine end
