PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'name': '', 'participant': '', 'date': '2021/', 'sex': 'female / male / I don`t want to talk about it', 'age': '', 'dominant hand': 'right / left / both', 'temparature': '℃', 'disinfection': 'done / not yet', 'note': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = deg
  Window size (pixels) = [1920, 1080]
  color = $(-1.0000, -1.0000, -1.0000)
  expName = pos
  keyboardBackend = ioHub
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Routines
  Routine pra
    CodeComponent code
      Code Type = Py
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      Begin Experiment:
        import random
        win.mouseVisible=False
      Begin Routine:
        jit = random.uniform(-0.5,0.5)
    TextComponent fix
      color = $(0.0000, 0.0000, 0.0000)
      letterHeight = 1
      startVal [time (s)] = 0.5
      text = +
      units = deg
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    PolygonComponent st_pra
      fillColor = $(0.0000, 0.0000, 0.0000)
      lineColor = $(0.0000, 0.0000, 0.0000)
      ori [set every repeat] = ori_st
      pos [set every repeat] = (xpos_st, jit)
      shape = triangle
      size = (4, 4)
      startVal [time (s)] = 1.0
      units = deg
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    PolygonComponent pr_pra
      fillColor = $(0.0000, 0.0000, 0.0000)
      lineColor = $(0.0000, 0.0000, 0.0000)
      nVertices = 40
      pos [set every repeat] = (xpos_pr, ypos_pr*size+jit)
      shape = regular polygon...
      size [set every repeat] = (w,0)
      startVal [time (s)] = 1.0
      units = deg
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    KeyboardComponent resp_pra
      allowedKeys = 'f','j'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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  Routine pra_inst
    ImageComponent inst
      image [set every repeat] = $inst1
      size = (1920, 1080)
      startVal [time (s)] = 0.0
      units = pix
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    KeyboardComponent resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine main_inst
    ImageComponent instr2
      image [set every repeat] = $inst2
      size = (1920, 1080)
      startVal [time (s)] = 0.0
      units = pix
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    KeyboardComponent m_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine main
    CodeComponent code_2
      Code Type = Py
      Begin Experiment:
        win.mouseVisible=False
        import random

        trialCounter = 0
        nRestTrial = 56
      Begin Routine:
        jit1 = random.uniform(-0.5, 0.5)

        trialCounter = trialCounter + 1

        if trialCounter % nRestTrial == 0:
            isRest = 1
        else:
            isRest = 0
    TextComponent fix2
      color = $(0.0000, 0.0000, 0.0000)
      letterHeight = 1
      startVal [time (s)] = 0.5
      text = +
      units = deg
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    PolygonComponent st_main
      fillColor = $(0.0000, 0.0000, 0.0000)
      lineColor = $(0.0000, 0.0000, 0.0000)
      ori [set every repeat] = ori_st
      pos [set every repeat] = (xpos_st, jit)
      shape = triangle
      size = (4, 4)
      startVal [time (s)] = 1
      units = deg
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    PolygonComponent pr_main
      fillColor = $(0.0000, 0.0000, 0.0000)
      lineColor = $(0.0000, 0.0000, 0.0000)
      ori [set every repeat] = ori_st
      pos [set every repeat] = (xpos_pr, ypos_pr*size+jit)
      shape = line
      size [set every repeat] = (w, 0)
      startVal [time (s)] = 1
      units = deg
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    KeyboardComponent resp2
      allowedKeys = 'f','j'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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  Routine rest
    TextComponent text2
      color = $(0.0000, 0.0000, 0.0000)
      letterHeight = 1
      startVal [time (s)] = 0.0
      units = deg
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      text:
        Rest !
        Press space
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine end
    TextComponent ending
      color = $(0.0000, 0.0000, 0.0000)
      letterHeight = 1
      startVal [time (s)] = 0.0
      units = deg
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      text:
        Exp is ended.
        Thank you!
    KeyboardComponent resp3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine noise_3
    NoiseStimComponent noise
      color = $[-1,-1,-1]
      filter = None
      imageComponent = Phase
      interpolate = nearest
      noiseBW = 1
      noiseBWO = 30
      noiseBaseSf = 8.0
      noiseClip = 3.0
      noiseElementSize = 15
      noiseFilterLower = 1.0
      noiseFilterOrder = 0.0
      noiseFilterUpper = 8.0
      noiseFractalPower = 0.0
      noiseImage = None
      noiseNewSample = Repeat
      noiseNewSampleWhen = 1
      noiseOri = 0.0
      noiseType = Uniform
      sf = None
      size = (400, 200)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 0.3
      units = pix
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  Routine pra_2
Flow
  LoopInitiator rep loopType="TrialHandler"
    conditionsFile = comb_b.csv
    loopType = fullRandom
    nReps = 2
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    conditions:
      [OrderedDict([('inst1', 'img/instc1.jpg'), ('inst2', 'img/instc2.jpg'), ('pra', 'cond/pra1.csv'), ('main', 'cond/cond1.csv')]),
      OrderedDict([('inst1', 'img/instc3.jpg'), ('inst2', 'img/instc4.jpg'), ('pra', 'cond/pra2.csv'), ('main', 'cond/cond2.csv')]),
      OrderedDict([('inst1', 'img/instc1.jpg'), ('inst2', 'img/instc2.jpg'), ('pra', 'cond/pra3.csv'), ('main', 'cond/cond3.csv')]),
      OrderedDict([('inst1', 'img/instc3.jpg'), ('inst2', 'img/instc4.jpg'), ('pra', 'cond/pra4.csv'), ('main', 'cond/cond4.csv')])]
    Routine pra_inst
    LoopInitiator rep1 loopType="TrialHandler"
      conditionsFile = $pra
      loopType = random
      nReps = 1
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      Routine pra
      Routine noise_3
    LoopTerminator rep1
    Routine main_inst
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $main
      loopType = random
      nReps = 8
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      Routine main
      Routine noise_3
      LoopInitiator restOrNot loopType="TrialHandler"
        loopType = random
        nReps = isRest
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        Routine rest
      LoopTerminator restOrNot
    LoopTerminator trials
  LoopTerminator rep
  Routine end
