PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'name': '', 'participant': '001', 'date': '2022/', 'sex': 'female/male/I don`t want to talk about it', 'age': '', 'dominant hand': 'right / left / both', 'tempareature': '℃', 'disinfection': 'done / not yet', 'note': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = deg
  Window size (pixels) = [1920, 1080]
  color = black
  expName = exp
  keyboardBackend = ioHub
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Routines
  Routine pra
    CodeComponent code_3
      Code Type = Py
      Begin Experiment:
        win.mouseVisible = False
        import random
        import numpy as np
        import math
      Begin Routine:
        intervalBlank = random.uniform(0.5, 0.8)
        win.mouseVisible = False

        jit = round(random.uniform(-0.5, 0.5), 2)
        prove = mouse.setPos(newPos=(dev+jit, dev+jit))

        if geo == "circle":
            xtri = 0
            ytri = 0
            xsq = 0
            ysq = 0
            xcir = round(random.uniform(3, 5), 2)
            ycir = round(random.uniform(3, 5), 2)
      Each Frame:
        prove = mouse.getPos()
        x, y = mouse.getPos()

        if x < 0:
            prove[0] = 0

        if y < 0:
            prove[1] = 0

        if y > 0 and x < 0:
            prove[1] = 0

        if y < 0 and x > 0:
            prove[0] = 0
      End Routine:
        prove = mouse.getPos()
        x, y = mouse.getPos()

        estArea = x * y
        estArea = estArea/2
        thisExp.addData("estArea", estArea)

        if geo == "circle":
            diffx_cir = abs(x) - xcir
            thisExp.addData("diffx_cir", diffx_cir)
            ratiox_cir = abs(x) / xcir
            thisExp.addData("ratiox_cir", ratiox_cir)
            diffy_cir = abs(y) - ycir
            thisExp.addData("diffy_cir", diffy_cir)
            ratioy_cir = abs(y) / ycir
            thisExp.addData("ratioy_cir", ratioy_cir)
            diffarea_cir = diffx_cir * diffy_cir/2
            thisExp.addData("diffarea_cir", diffarea_cir)
    TextComponent blank_pra
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $intervalBlank
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    PolygonComponent fix_pra
      fillColor = red
      lineColor = red
      lineWidth = 0
      opacity = 0.5
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = $intervalBlank
      stopVal [duration (s)] = 0.25
      units = deg
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    PolygonComponent stanCir_pra
      contrast = 0.5
      fillColor = $[0, 0, 0]
      lineColor = $[0, 0, 0]
      nVertices = 100
      opacity = 0.5
      shape = regular polygon...
      size [set every repeat] = (xcir, ycir)
      startVal [time (s)] = $intervalBlank+0.25
      units = deg
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    PolygonComponent fix_pra2
      fillColor = red
      lineColor = red
      lineWidth = 0
      nVertices = 40
      opacity = 0.5
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = $intervalBlank+0.5
      units = deg
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    PolygonComponent AjustSquare_pra
      opacity = 0.5
      saveStartStop = False
      shape = rectangle
      size [set every frame] = prove
      startVal [time (s)] = $intervalBlank+0.5
      units = deg
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    MouseComponent mouse
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = $intervalBlank+1
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  Routine main
    TextComponent text_2
      color = $[0,0,0]
      letterHeight = 1
      opacity = 0.5
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = deg
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      text:
        main test
        adjust same size using mouse
        press space
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine inst
    CodeComponent code
      Code Type = Py
      Begin Experiment:
        win.mouseVisible = False
      Begin Routine:
        win.mouseVisible = False
        corner = 4
      Each Frame:
        win.mouseVisible = False
    TextComponent text
      color = $[0, 0, 0]
      letterHeight = 1
      opacity = 0.5
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = deg
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      text:
        Practice
        adjust same size using mouse
        press space
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine trial
    CodeComponent code_2
      Code Type = Py
      Begin Experiment:
        win.mouseVisible = False
        import random
        import numpy as np
        import math
        from PIL import Image
        import matplotlib as plt
        import matplotlib.pyplot

        trialCounter = 0
        nRestTrial = 20
      Begin Routine:
        intervalBlank = random.uniform(0.5, 0.8)
        win.mouseVisible = False

        jit = round(random.uniform(-0.5, 0.5), 2)
        prove = mouse.setPos(newPos=(dev+jit, dev+jit))

        if stim == "stan" and geo == "uptriangle":
            xtri = size
            ytri = size
            xsq = 0
            ysq = 0
            xcir = 0
            ycir = 0

        if stim == "stan" and geo =="downtriangle":
            xtri = size
            ytri = size
            xsq = 0
            ysq = 0
            xcir = 0
            ycir = 0

        if stim == "filer" and geo == "uptriangle":
            xtri = round(random.uniform(3, 5), 2)
            ytri = round(random.uniform(3, 5), 2)
            xsq = 0
            ysq = 0
            xcir = 0
            ycir = 0

        if stim == "filer" and geo =="downtriangle":
            xtri = round(random.uniform(3, 5), 2)
            ytri = round(random.uniform(3, 5), 2)
            xsq = 0
            ysq = 0
            xcir = 0
            ycir = 0

        trialCounter = trialCounter + 1
        if trialCounter % nRestTrial == 0:
            isRest = 1
        else:
            isRest = 0
      Each Frame:
        prove = mouse.getPos()
        x, y = mouse.getPos()

        if x < 0:
            prove[0] = 0

        if y < 0:
            prove[1] = 0

        if y > 0 and x < 0:
            prove[1] = 0

        if y < 0 and x > 0:
            prove[0] = 0
      End Routine:
        prove = mouse.getPos()
        x, y = mouse.getPos()

        estArea = x * y
        estArea = estArea/2
        thisExp.addData("estArea", estArea)

        if geo == "uptriangle" or geo =="downtriangle":
            diffx_tri = abs(x) - xtri
            thisExp.addData("diffx_tri", diffx_tri)
            ratiox_tri = abs(x) / xtri
            thisExp.addData("ratiox_tri", ratiox_tri)
            diffy_tri = abs(y) - ytri
            thisExp.addData("diffy_tri", diffy_tri)
            ratioy_tri = abs(y) / ytri
            thisExp.addData("ratioy_tri", ratioy_tri)
            diffarea_tri = diffx_tri * diffy_tri/2
            thisExp.addData("diffarea_tri", diffarea_tri)

        if geo == "square":
            diffx_sq = abs(x) - xsq
            thisExp.addData("diffx_sq", diffx_sq)
            ratiox_sq = abs(x) / xsq
            thisExp.addData("ratiox_sq", ratiox_sq)
            diffy_sq = abs(y) - ysq
            thisExp.addData("diffy_sq", diffy_sq)
            ratioy_sq = abs(y) / ysq
            thisExp.addData("ratioy_sq", ratioy_sq)
            diffarea_sq = diffx_sq * diffy_sq/2
            thisExp.addData("diffarea_sq", diffarea_sq)
    TextComponent text_3
      letterHeight = 1
      opacity = 0.7
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $intervalBlank
      units = deg
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    PolygonComponent fix_main
      fillColor = red
      lineColor = red
      lineWidth = 0
      opacity = 0.5
      saveStartStop = False
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = $intervalBlank
      stopVal [duration (s)] = 0.2
      units = deg
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    PolygonComponent stanTriangle_main
      contrast = 0.5
      fillColor = $[0, 0, 0]
      lineColor = $[0, 0, 0]
      opacity = 0.5
      ori [set every repeat] = ori
      shape = triangle
      size [set every repeat] = (xtri, ytri)
      startVal [time (s)] = $intervalBlank+0.25
      stopVal [duration (s)] = 0.25
      units = deg
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    PolygonComponent fix_main2
      fillColor = red
      lineColor = red
      lineWidth = 0
      opacity = 0.5
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = $intervalBlank+0.7
      units = deg
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    PolygonComponent AjustSquare_main
      opacity = 0.5
      shape = rectangle
      size [set every frame] = prove
      startVal [time (s)] = $intervalBlank+0.7
      units = deg
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    MouseComponent mouse_2
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = $intervalBlank+0.7
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    NoiseStimComponent noise
      filter = None
      imageComponent = Phase
      interpolate = nearest
      noiseBW = 1
      noiseBWO = 30
      noiseBaseSf = 8.0
      noiseClip = 3.0
      noiseElementSize = 2.5
      noiseFilterLower = 1.0
      noiseFilterOrder = 0.0
      noiseFilterUpper = 8.0
      noiseFractalPower = 0.0
      noiseImage = None
      noiseNewSample = None
      noiseNewSampleWhen = 1
      noiseOri = 0.0
      noiseType = Uniform
      opacity = 0.2
      sf = None
      size = (1920, 1080)
      startVal [time (s)] = $intervalBlank+0.5
      stopVal [duration (s)] = 0.2
      units = pix
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  Routine rest
    TextComponent text_4
      color = $[0,0,0]
      letterHeight = 1
      startVal [time (s)] = 0.0
      units = deg
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      text:
        rest !
        Press space
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine end
    TextComponent text_5
      color = $[0,0,0]
      letterHeight = 1
      opacity = 0.5
      startVal [time (s)] = 0.0
      text = Thank you !
      units = deg
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    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine inst
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = pra.csv
    loopType = random
    nReps = 10
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    conditions:
      [OrderedDict([('label', 'pra'), ('ori', 0), ('dev', 10), ('geo', 'circle'), ('size', 0)]),
      OrderedDict([('label', 'pra'), ('ori', 0), ('dev', 1), ('geo', 'circle'), ('size', 0)])]
    Routine pra
  LoopTerminator trials
  Routine main
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = main.csv
    loopType = random
    nReps = 10
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    conditions:
      [OrderedDict([('label', 'main'), ('size', 0), ('ori', 0), ('dev', 10), ('geo', 'uptriangle'), ('stim', 'filer')]),
      OrderedDict([('label', 'main'), ('size', 0), ('ori', 0), ('dev', 1), ('geo', 'uptriangle'), ('stim', 'filer')]),
      OrderedDict([('label', 'main'), ('size', 0), ('ori', 180), ('dev', 10), ('geo', 'downtriangle'), ('stim', 'filer')]),
      OrderedDict([('label', 'main'), ('size', 0), ('ori', 180), ('dev', 1), ('geo', 'downtriangle'), ('stim', 'filer')]),
      OrderedDict([('label', 'main'), ('size', 3), ('ori', 0), ('dev', 10), ('geo', 'uptriangle'), ('stim', 'stan')]),
      OrderedDict([('label', 'main'), ('size', 3), ('ori', 0), ('dev', 1), ('geo', 'uptriangle'), ('stim', 'stan')]),
      OrderedDict([('label', 'main'), ('size', 4), ('ori', 0), ('dev', 10), ('geo', 'uptriangle'), ('stim', 'stan')]),
      OrderedDict([('label', 'main'), ('size', 4), ('ori', 0), ('dev', 1), ('geo', 'uptriangle'), ('stim', 'stan')]),
      OrderedDict([('label', 'main'), ('size', 5), ('ori', 0), ('dev', 10), ('geo', 'uptriangle'), ('stim', 'stan')]),
      OrderedDict([('label', 'main'), ('size', 5), ('ori', 0), ('dev', 1), ('geo', 'uptriangle'), ('stim', 'stan')]),
      OrderedDict([('label', 'main'), ('size', 3), ('ori', 180), ('dev', 10), ('geo', 'downtriangle'), ('stim', 'stan')]),
      OrderedDict([('label', 'main'), ('size', 3), ('ori', 180), ('dev', 1), ('geo', 'downtriangle'), ('stim', 'stan')]),
      OrderedDict([('label', 'main'), ('size', 4), ('ori', 180), ('dev', 10), ('geo', 'downtriangle'), ('stim', 'stan')])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
    Routine trial
    LoopInitiator trials_2 loopType="TrialHandler"
      loopType = random
      nReps = isRest
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      Routine rest
    LoopTerminator trials_2
  LoopTerminator trials_3
  Routine end
