PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = KanizsaTriangle
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Routines
  Routine trial
    CodeComponent code
      Code Type = Py
      Begin Experiment:
        win.mouseVisible = False
        x = 0
    TextComponent fix
      letterHeight = 1
      startVal [time (s)] = 0.0
      text = +
      units = deg
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    PolygonComponent triangle_s_1
      fillColor = $[-1.0000, -1.0000, -1.0000]
      lineColor = $[-1.0000, -1.0000, -1.0000]
      nVertices = 40
      pos [set every repeat] = (-4,2)
      shape = regular polygon...
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = deg
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    PolygonComponent triangle_s_2
      fillColor = $[-1.0000, -1.0000, -1.0000]
      lineColor = $[-1.0000, -1.0000, -1.0000]
      nVertices = 40
      pos [set every repeat] = (-6, -2)
      shape = regular polygon...
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = deg
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    PolygonComponent triangle_s_3
      fillColor = $[-1.0000, -1.0000, -1.0000]
      lineColor = $[-1.0000, -1.0000, -1.0000]
      nVertices = 40
      pos [set every repeat] = (-2, -2)
      shape = regular polygon...
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = deg
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    PolygonComponent upright
      fillColor = $[0.0000, 0.0000, 0.0000]
      lineColor = $[0.0000, 0.0000, 0.0000]
      pos [set every repeat] = (-4, 0)
      shape = triangle
      size = (4, 4)
      startVal [time (s)] = 0.0
      units = deg
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    PolygonComponent inverse_s_1
      fillColor = $[-1.0000, -1.0000, -1.0000]
      lineColor = $[-1.0000, -1.0000, -1.0000]
      nVertices = 40
      pos = (2, 2)
      shape = regular polygon...
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = deg
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    PolygonComponent inverse_s_2
      fillColor = $[-1.0000, -1.0000, -1.0000]
      lineColor = $[-1.0000, -1.0000, -1.0000]
      nVertices = 40
      pos = (6, 2)
      shape = regular polygon...
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = deg
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    PolygonComponent inverse_s_3
      fillColor = $[-1.0000, -1.0000, -1.0000]
      lineColor = $[-1.0000, -1.0000, -1.0000]
      nVertices = 40
      pos = (4, -2)
      shape = regular polygon...
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = deg
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    PolygonComponent inverse
      fillColor = $[0.0000, 0.0000, 0.0000]
      lineColor = $[0.0000, 0.0000, 0.0000]
      ori = 180
      pos = (4, 0)
      shape = triangle
      size = (4, 4)
      startVal [time (s)] = 0.0
      units = deg
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Flow
  Routine trial
