PsychoPy2experiment version="1.90.3"
Settings
  expName = AdjustCIrcle
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Window size (pixels) = (1024, 768)
  Screen = 1
  Monitor = testMonitor
  Units = use prefs
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Routines
  Routine trial
    CodeComponent SizeAdjust
      Begin Experiment:
        import random
        import numpy as np
      Begin Routine:
        fv = np.array([3, 3]) + (random.random() - 0.5)
        trials.addData('StartSize', fv)
        RespCircle.setSize(fv)
      Each Frame:
        theseKeys = event.getKeys(keyList=['return', 'up', 'down'])

        if "up" in theseKeys:
            tmp = RespCircle.size
            RespCircle.setSize(tmp + 0.1)

        if "down" in theseKeys:
            tmp = RespCircle.size
            RespCircle.setSize(tmp - 0.1)

        if "return" in theseKeys:
            trials.addData('AnswerSize', RespCircle.size)
            continueRoutine = False
    TextComponent fixation
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = cm
      text = +
      letterHeight = 1
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    PolygonComponent StimCircle
      startVal [time (s)] = 0.5
      units = cm
      pos = (-5, 0)
      size = (3, 3)
      nVertices = 90
      shape = regular polygon...
      fillColor = $[0,0,0]
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    PolygonComponent RespCircle
      startVal [time (s)] = 0.5
      units = cm
      pos = (5, 0)
      size = (3, 3)
      nVertices = 90
      shape = regular polygon...
      fillColor = $[0,0,0]
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Flow
  LoopInitiator trials loopType="TrialHandler"
    nReps = 5
    loopType = random
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    Routine trial
  LoopTerminator trials
