PsychoPy2experiment version="1.83.04"
Settings
  Data filename = u'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1024, 768]
  Full-screen window = True
  Experiment info = {'participant':'', 'session':'001'}
  expName = BlockRandom
  Units = use prefs
  Screen = 1
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Routines
  Routine trial
    StaticComponent ISI
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
    TextComponent fixation
      text = ＋
      stopVal [duration (s)] = 0.5
      units = cm
      startVal [time (s)] = 0.0
      font = Meiryo
      letterHeight = 1.5
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    TextComponent wordstim
      text [set every repeat] = $word
      units = cm
      startVal [time (s)] = 0.5
      font = Meiryo
      letterHeight = 1.5
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    KeyboardComponent wordresp
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 0.5
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Flow
  LoopInitiator blocks loopType="TrialHandler"
    conditionsFile = blockconditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{u'stimlist': u'chineseletter.xlsx'},
      {u'stimlist': u'hiraganaletter.xlsx'},
      {u'stimlist': u'katakanaletter.xlsx'}]
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $stimlist
      loopType = random
      nReps = 1
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      Routine trial
    LoopTerminator trials
  LoopTerminator blocks
