PsychoPy2experiment version="2021.1.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1504, 1003]
  color = $(-1.0000, -1.0000, -1.0000)
  expName = ajustSize
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Routines
  Routine trial
    CodeComponent code
      Code Type = Py
      Begin Experiment:
        win.mouseVisible = False
        posy = 0
        import random
        import numpy as np
      Begin Routine:
        jit = random.uniform(-0.1, 0.1)
      Each Frame:
        theseKeys = event.getKeys(keyList=['return', 'up', 'down'])

        if "up" in theseKeys:
            posy +=0.05

        if "down" in theseKeys:
            posy -=0.05

        if "return" in theseKeys:
            trials.addData('Answer', Circle.pos)
            continueRoutine = False
      End Experiment:
        trials.addData('StartSize', start_pos)
    PolygonComponent Circle
      fillColor = white
      nVertices = 40
      pos [set every frame] = (0, start_pos + posy+jit)
      shape = regular polygon...
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      units = deg
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    PolygonComponent start_circle
      fillColor = white
      nVertices = 40
      pos = (-5, 0)
      shape = regular polygon...
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      units = deg
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    PolygonComponent end_circle
      fillColor = white
      nVertices = 40
      pos = (5, 0)
      shape = regular polygon...
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      units = deg
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = cond.csv
    loopType = random
    nReps = 5
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    conditions:
      [OrderedDict([('start_pos', 3), ('ori', 0)]),
      OrderedDict([('start_pos', 3), ('ori', 0)]),
      OrderedDict([('start_pos', 3), ('ori', 180)]),
      OrderedDict([('start_pos', 3), ('ori', 180)]),
      OrderedDict([('start_pos', -3), ('ori', 0)]),
      OrderedDict([('start_pos', -3), ('ori', 0)]),
      OrderedDict([('start_pos', -3), ('ori', 180)]),
      OrderedDict([('start_pos', -3), ('ori', 180)])]
    Routine trial
  LoopTerminator trials
