PsychoPy2experiment version="2021.1.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  color = $(-1.0000, -1.0000, -1.0000)
  expName = boundary
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Routines
  Routine trial
    CodeComponent code
      Code Type = Py
      Begin Experiment:
        win.mouseVisible = False
        ver = 0
        par = 0
        import random
        import numpy as np
      Each Frame:
        theseKeys = event.getKeys(keyList=['return', 'up', 'down', 'right', 'left'])

        if "up" in theseKeys:
            ver += 0.1

        if "down" in theseKeys:
            ver -= 0.1

        if "right" in theseKeys:
            par += 0.1

        if "left" in theseKeys:
            par -= 0.1

        if "return" in theseKeys:
            trials.addData('Answer', stan.size)
            continueRoutine = False
    PolygonComponent prov
      fillColor = $(0.0000, 0.0000, 0.0000)
      lineColor = $(0.0000, 0.0000, 0.0000)
      ori [set every repeat] = ori_st
      pos [set every repeat] = (stan_posx, stan_posy)
      shape = triangle
      size [set every frame] = (w+par, h+ver)
      startVal [time (s)] = 1.0
      units = deg
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    PolygonComponent stan
      fillColor = $(0.0000, 0.0000, 0.0000)
      lineColor = $(0.0000, 0.0000, 0.0000)
      ori [set every repeat] = ori_pr
      pos [set every repeat] = (pro_posx, pro_posy)
      shape = triangle
      size = (6.48, 6.48)
      startVal [time (s)] = 1.0
      units = deg
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    PolygonComponent fix
      fillColor = $(0.0000, 0.0000, 0.0000)
      lineColor = $(0.0000, 0.0000, 0.0000)
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
      units = deg
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  Routine trial2
    PolygonComponent pro
      fillColor = white
      shape = triangle
      size = (0.5, 0.5)
      startVal [time (s)] = 1
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = cond.csv
    loopType = random
    nReps = 5
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    conditions:
      [OrderedDict([('w', 3.89), ('h', 3.89), ('stan_posx', 6.75), ('stan_posy', 2.7), ('pro_posx', -6.75), ('pro_posy', -2.7), ('ori_st', 0), ('ori_pr', 0)]),
      OrderedDict([('w', 3.89), ('h', 3.89), ('stan_posx', 6.75), ('stan_posy', 2.7), ('pro_posx', -6.75), ('pro_posy', -2.7), ('ori_st', 180), ('ori_pr', 180)]),
      OrderedDict([('w', 3.89), ('h', 3.89), ('stan_posx', 6.75), ('stan_posy', 2.7), ('pro_posx', -6.75), ('pro_posy', -2.7), ('ori_st', 0), ('ori_pr', 180)]),
      OrderedDict([('w', 3.89), ('h', 3.89), ('stan_posx', 6.75), ('stan_posy', 2.7), ('pro_posx', -6.75), ('pro_posy', -2.7), ('ori_st', 180), ('ori_pr', 0)]),
      OrderedDict([('w', 3.89), ('h', 3.89), ('stan_posx', 6.75), ('stan_posy', -2.7), ('pro_posx', -6.75), ('pro_posy', 2.7), ('ori_st', 0), ('ori_pr', 0)]),
      OrderedDict([('w', 3.89), ('h', 3.89), ('stan_posx', 6.75), ('stan_posy', -2.7), ('pro_posx', -6.75), ('pro_posy', 2.7), ('ori_st', 180), ('ori_pr', 180)]),
      OrderedDict([('w', 3.89), ('h', 3.89), ('stan_posx', 6.75), ('stan_posy', -2.7), ('pro_posx', -6.75), ('pro_posy', 2.7), ('ori_st', 0), ('ori_pr', 180)]),
      OrderedDict([('w', 3.89), ('h', 3.89), ('stan_posx', 6.75), ('stan_posy', -2.7), ('pro_posx', -6.75), ('pro_posy', 2.7), ('ori_st', 180), ('ori_pr', 0)]),
      OrderedDict([('w', 3.89), ('h', 3.89), ('stan_posx', -6.75), ('stan_posy', 2.7), ('pro_posx', 6.75), ('pro_posy', -2.7), ('ori_st', 0), ('ori_pr', 0)])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
    Routine trial
  LoopTerminator trials
