PsychoPy2experiment version="2021.1.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  color = $(-1.0000, -1.0000, -1.0000)
  expName = RM_wind
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Routines
  Routine trial
    CodeComponent code
      Code Type = Py
      Begin Experiment:
        import random
      Begin Routine:
        pos_jit = random.uniform(-2,2)
      Each Frame:
        pos = pos_jit + start_pos*15+t*-7.5*start_pos
        baseline = pos_jit + start_pos*15+2*-7.5*start_pos
      End Routine:
        trials.addData("pos",pos)
    TextComponent text_2
      letterHeight = 0.1
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = +
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    ImageComponent image
      image = balloon-blue.png
      pos [set every frame] = (pos, 0)
      size = (1, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      units = deg
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  Routine fix
    TextComponent text
      color = red
      letterHeight = 0.1
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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  Routine resp
    CodeComponent code_2
      Code Type = Py
      Begin Routine:
        probe_pos = pos + random.uniform(-3,3)
        #ランダムに取ってきて割り当て
      Each Frame:
        #mouseTrial.getPos()
        mouse_pos = mouseTrial.getPos()
        probe_pos = mouse_pos[0]*10
      End Routine:
        trials.addData("probe",probe_pos)
    PolygonComponent polygon_2
      fillColor = $[-1,-1,-1]
      lineWidth = 0
      ori = 180
      pos [set every frame] = (baseline+x_def, 2.5)
      shape = triangle
      size = (0.3, 0.6)
      startVal [time (s)] = 0.5
      units = deg
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    PolygonComponent polygon_3
      fillColor = $[-1,-1,-1]
      lineWidth = 0
      pos [set every frame] = (baseline+x_def, -1.5)
      shape = triangle
      size = (0.3, 0.6)
      startVal [time (s)] = 0.5
      units = deg
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    KeyboardComponent key_resp
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    MouseComponent mouseTrial
      forceEndRoutineOnPress = any click
      saveMouseState = every frame
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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  Routine rest
    TextComponent text_4
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = press SPACE to start!
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine inst
    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        -> : the ball was rightside
        <- : the ball was leftside
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_6
      color = green
      letterHeight = 0.05
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = press SPACE to start!
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    MouseComponent mouse_2
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    CodeComponent code_3
      Code Type = Py
      Begin Routine:
        mouse_2.setVisible(False)
  Routine wel
    ImageComponent image_2
      image = タイトルなし.png
      size = (1024, 768)
      startVal [time (s)] = 0.0
      units = pix
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    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine inst
  LoopInitiator trials_2 loopType="TrialHandler"
    loopType = random
    nReps = 8
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    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = RM_cond.csv
      loopType = random
      nReps = 2
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      conditions:
        [OrderedDict([('start_pos', -1), ('x_def', -0.8)]),
        OrderedDict([('start_pos', -1), ('x_def', -0.4)]),
        OrderedDict([('start_pos', -1), ('x_def', -0.2)]),
        OrderedDict([('start_pos', -1), ('x_def', 0.0)]),
        OrderedDict([('start_pos', -1), ('x_def', 0.2)]),
        OrderedDict([('start_pos', -1), ('x_def', 0.4)]),
        OrderedDict([('start_pos', -1), ('x_def', 0.8)]),
        OrderedDict([('start_pos', 1), ('x_def', -0.8)]),
        OrderedDict([('start_pos', 1), ('x_def', -0.4)]),
        OrderedDict([('start_pos', 1), ('x_def', -0.2)]),
        OrderedDict([('start_pos', 1), ('x_def', 0.0)]),
        OrderedDict([('start_pos', 1), ('x_def', 0.2)]),
        OrderedDict([('start_pos', 1), ('x_def', 0.4)]),
        OrderedDict([('start_pos', 1), ('x_def', 0.8)])]
      Routine fix
      Routine trial
      Routine resp
    LoopTerminator trials
    Routine rest
  LoopTerminator trials_2
