PsychoPy2experiment version="2021.1.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = banksy
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Routines
  Routine trial
    CodeComponent code
      Code Type = Py
      Begin Experiment:
        win.mouseVisible=False
    ImageComponent balloon
      image = image\balloon.png
      pos = (0.3, 4)
      size = (3, 5)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1
      units = deg
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    ImageComponent girl
      image = image\person.png
      pos = (-2, 0)
      size = (3, 5)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 0.5
      units = deg
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    ImageComponent ballon3
      image = image\balloon.png
      pos [set every repeat] = (0.3, 4*ys)
      size = (3, 5)
      startVal [time (s)] = 3
      units = deg
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = condition\condition.csv
    loopType = random
    nReps = 5
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    conditions:
      [OrderedDict([('ys', 1.4)]),
      OrderedDict([('ys', 1.2)]),
      OrderedDict([('ys', 1.1)]),
      OrderedDict([('ys', 1.0)]),
      OrderedDict([('ys', 0.9)]),
      OrderedDict([('ys', 0.8)]),
      OrderedDict([('ys', 0.6)])]
    Routine trial
  LoopTerminator trials
