PsychoPy2experiment version="2021.1.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  color = $(-1.0000, -1.0000, -1.0000)
  expName = TTC_sample3
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Routines
  Routine trial
    CodeComponent code
      Code Type = Py
      Begin Experiment:
        win.mouseVisible = False

        far = 130
        near = 60
        s = 10
        diff = far - near
        distance = diff/2
        v = distance/0.75

        #V = VARIABLE
        #distance = 0.75*v
        #diff = distance*2
      Begin Routine:
        import random
        import math
      Each Frame:
        if d == 60:
           size = 360/pi*math.atan(s/(d+v*(t-1.5))/2)
        else:
           size = 360/pi*math.atan(s/(d-v*(t-1.5))/2)


        #= 360/PI()*ATAN(I2/H2/2)
        #= 57+344*J3
        #atan
        #function = (360/pi*math.atan(s/d-v*(t-1.5)/2))*(t-1.5)
        #function2 = (360/pi*math.atan(s/d+v*(t-1.5)/2))*(t-1.5)

        #function = 9.71**(t-1.5)
        #jit = random.uniform(-1,1)

        #if d == 573:
        #    size = function+start_size

        #else:
        #    size = function2+start_size2
    PolygonComponent obeject
      fillColor = $(0.0000, 0.0000, 0.0000)
      lineColor = $(0.0000, 0.0000, 0.0000)
      nVertices = 40
      shape = regular polygon...
      size [set every frame] = (size,size)
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 0.75
      units = deg
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    TextComponent fix
      color = $(0.0000, 0.0000, 0.0000)
      letterHeight = 1.5
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
      text = +
      units = deg
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  Routine inst
    TextComponent same
      letterHeight = 2
      pos = (0, 1)
      startVal [time (s)] = 0.0
      units = deg
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      text:
        same = F
        different = J
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent space
      color = $(-1.0000, 0.0039, -1.0000)
      letterHeight = 1.5
      pos = (0, -2)
      startVal [time (s)] = 0.0
      text = press SPACE to start
      units = deg
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  Routine resp
    CodeComponent code_2
      Code Type = Py
      Begin Experiment:
        #import random
      Begin Routine:
        #probe = probe
        #jit = random.uniform(-1,1)
    PolygonComponent prove
      fillColor = $(0.0000, 0.0000, 0.0000)
      lineColor = $(0.0000, 0.0000, 0.0000)
      nVertices = 40
      shape = regular polygon...
      size [set every repeat] = (probe,probe)
      startVal [time (s)] = 0
      units = deg
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    KeyboardComponent resp1
      allowedKeys = 'f','j'
      forceEndRoutine = True
      startVal [time (s)] = 0
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  Routine ISI
    TextComponent text
      color = $(0.0000, 0.0000, 0.0000)
      letterHeight = 1.5
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = isi
      units = deg
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Flow
  Routine inst
  LoopInitiator rep loopType="TrialHandler"
    loopType = random
    nReps = 10
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    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = TTC_sample3copycopy.csv
      loopType = random
      nReps = 3
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      conditions:
        [OrderedDict([('d', 200), ('probe', 5.75), ('isi', 0.25)]),
        OrderedDict([('d', 200), ('probe', 5.75), ('isi', 0.5)]),
        OrderedDict([('d', 200), ('probe', 5.75), ('isi', 0.75)]),
        OrderedDict([('d', 200), ('probe', 5.75), ('isi', 1.0)]),
        OrderedDict([('d', 200), ('probe', 5.62), ('isi', 0.25)]),
        OrderedDict([('d', 200), ('probe', 5.62), ('isi', 0.5)]),
        OrderedDict([('d', 200), ('probe', 5.62), ('isi', 0.75)]),
        OrderedDict([('d', 200), ('probe', 5.62), ('isi', 1.0)]),
        OrderedDict([('d', 200), ('probe', 5.5), ('isi', 0.25)]),
        OrderedDict([('d', 200), ('probe', 5.5), ('isi', 0.5)]),
        OrderedDict([('d', 200), ('probe', 5.5), ('isi', 0.75)]),
        OrderedDict([('d', 200), ('probe', 5.5), ('isi', 1.0)]),
        OrderedDict([('d', 200), ('probe', 5.37), ('isi', 0.25)]),
        OrderedDict([('d', 200), ('probe', 5.37), ('isi', 0.5)]),
        OrderedDict([('d', 200), ('probe', 5.37), ('isi', 0.75)]),
        OrderedDict([('d', 200), ('probe', 5.37), ('isi', 1.0)]),
        OrderedDict([('d', 200), ('probe', 5.25), ('isi', 0.25)]),
        OrderedDict([('d', 200), ('probe', 5.25), ('isi', 0.5)]),
        OrderedDict([('d', 200), ('probe', 5.25), ('isi', 0.75)]),
        OrderedDict([('d', 200), ('probe', 5.25), ('isi', 1.0)]),
        OrderedDict([('d', 50), ('probe', 5.75), ('isi', 0.25)]),
        OrderedDict([('d', 50), ('probe', 5.75), ('isi', 0.5)]),
        OrderedDict([('d', 50), ('probe', 5.75), ('isi', 0.75)]),
        OrderedDict([('d', 50), ('probe', 5.75), ('isi', 1.0)]),
        OrderedDict([('d', 50), ('probe', 5.62), ('isi', 0.25)]),
        OrderedDict([('d', 50), ('probe', 5.62), ('isi', 0.5)])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
      Routine trial
      Routine ISI
      Routine resp
    LoopTerminator trials
  LoopTerminator rep
