PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = kanizsa
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Routines
  Routine trial
    CodeComponent code
      Code Type = Py
      Begin Experiment:
        win.mouseVisible = False
        x = 0
    TextComponent fix
      letterHeight = 1
      startVal [time (s)] = 0.0
      text = +
      units = deg
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    PolygonComponent circle_s_1
      fillColor = $[-1.0000, -1.0000, -1.0000]
      lineColor = $[-1.0000, -1.0000, -1.0000]
      nVertices = 40
      pos [set every repeat] = (x+2, 2)
      shape = regular polygon...
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = deg
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    PolygonComponent circle_s_2
      fillColor = $[-1.0000, -1.0000, -1.0000]
      lineColor = $[-1.0000, -1.0000, -1.0000]
      nVertices = 40
      pos [set every repeat] = (x-2, 2)
      shape = regular polygon...
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = deg
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    PolygonComponent circle_s_3
      fillColor = $[-1.0000, -1.0000, -1.0000]
      lineColor = $[-1.0000, -1.0000, -1.0000]
      nVertices = 40
      pos [set every repeat] = (x+2, -2)
      shape = regular polygon...
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = deg
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    PolygonComponent circle_s_4
      fillColor = $[-1.0000, -1.0000, -1.0000]
      lineColor = $[-1.0000, -1.0000, -1.0000]
      nVertices = 40
      pos [set every repeat] = (x-2, -2)
      shape = regular polygon...
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = deg
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    PolygonComponent square
      fillColor = $[0.0000, 0.0000, 0.0000]
      lineColor = $[0.0000, 0.0000, 0.0000]
      pos [set every repeat] = (x, 0)
      shape = rectangle
      size = (4, 4)
      startVal [time (s)] = 0.0
      units = deg
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Flow
  Routine trial
