PsychoPy2experiment version="2021.1.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = ttc
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Routines
  Routine trial
    CodeComponent code
      Code Type = Py
      Begin Experiment:
        #start_size1 = 1
        #start_size2 = 0.5
        #start_size3 = 2
      Each Frame:
        #expansion = start_size * speed / (distance*distance)
        # for examplpe
        # = 1.78 * 300 / (3225*3225

        #size = start_size*expansion*t
        #tau = ((distance-(speed*t))/speed) * start_size * speed / ((distance-(speed*t))*(distance-(speed*t)))
        tau = start_size * speed / (distance*distance)

        #square_size = start_size + expansion*t
        #square_size2 = start_size2 + expansion2*t
        #square_size3 = start_size3 + expansion3*t
    PolygonComponent circle
      fillColor = white
      nVertices = 40
      shape = regular polygon...
      size [set every frame] = (start_size*tau, start_size*tau)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = time
      units = deg
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = cond.csv
    loopType = random
    nReps = 2
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    conditions:
      [OrderedDict([('speed', 300), ('time', 0.75), ('distance', 3225), ('start_size', 1.78)]),
      OrderedDict([('speed', 300), ('time', 1.5), ('distance', 3450), ('start_size', 1.66)]),
      OrderedDict([('speed', 300), ('time', 3.0), ('distance', 3900), ('start_size', 1.47)]),
      OrderedDict([('speed', 600), ('time', 0.75), ('distance', 6450), ('start_size', 0.89)]),
      OrderedDict([('speed', 600), ('time', 1.5), ('distance', 6900), ('start_size', 0.83)]),
      OrderedDict([('speed', 600), ('time', 3.0), ('distance', 7800), ('start_size', 0.73)]),
      OrderedDict([('speed', 1200), ('time', 0.75), ('distance', 12900), ('start_size', 0.44)]),
      OrderedDict([('speed', 1200), ('time', 1.5), ('distance', 13800), ('start_size', 0.42)]),
      OrderedDict([('speed', 1200), ('time', 3.0), ('distance', 15600), ('start_size', 0.37)])]
    Routine trial
  LoopTerminator trials
