PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = skipRoutine
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Routines
  Routine trial
    CodeComponent code
      Code Type = Py
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      Begin Experiment:
        win.mouseVisible = False
      Begin Routine:
        theseKeys = event.getKeys(keyList=['right'])

        if "right" in theseKeys:
            continueRoutine = False
            trials.finished = True
    PolygonComponent polygon
      fillColor = white
      nVertices = 40
      shape = regular polygon...
      size = (10, 10)
      startVal [time (s)] = 0.5
      units = deg
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    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine end
    TextComponent text
      letterHeight = 1
      startVal [time (s)] = 0.0
      units = deg
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      text:
        you are successful!

        exp is ended.
    KeyboardComponent key_resp_2
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 100
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    Routine trial
  LoopTerminator trials
  Routine end
