PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = sliderImage
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Routines
  Routine trial
    CodeComponent code
      Code Type = Py
      Begin Experiment:
        win.mouseVisible = False
        import random

        i = "1"
      Begin Routine:
        stim.setImage("img\img ("+i+").png")

        fv = np.array([3, 3]) + (random.random() - 0.5)
        #trials.addData('StartSize', fv)
        #RespCircle.setSize(fv)
      Each Frame:
        theseKeys = event.getKeys(keyList=['return', 'left', 'right'])

        if "left" in theseKeys:
            i = int(i)
            if i < 13:
                i += 1
                i = str(i)
                stim.setImage("img\img ("+i+").png")
            else:
                i = str(i)


        if "right" in theseKeys:
            i = int(i)
            if i > 1:
                i  -= 1
                i = str(i)
                stim.setImage("img\img ("+i+").png")
            else:
                i = str(i)

        if "return" in theseKeys:
            file = "img ("+i+").png"
            thisExp.addData('AnswerSize',file)
            continueRoutine = False
    ImageComponent stim
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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Flow
  Routine trial
