PsychoPy2experiment version="2021.1.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1504, 1003]
  color = $(-1.0000, -1.0000, -1.0000)
  expName = height
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Routines
  Routine trial
    CodeComponent code
      Code Type = Py
      Begin Experiment:
        winMouseVisible = False
    PolygonComponent line
      fillColor = $(0.0000, 0.0000, 0.0000)
      lineColor = $(0.0000, 0.0000, 0.0000)
      pos = (0, -5)
      shape = line
      size = (100, 0)
      startVal [time (s)] = 0.0
      units = deg
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    PolygonComponent building
      fillColor = $(0.0000, 0.0000, 0.0000)
      lineColor = $(0.0000, 0.0000, 0.0000)
      pos = (-5, 0)
      shape = rectangle
      size = (2.5, 10)
      startVal [time (s)] = 0.0
      units = deg
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    PolygonComponent church
      fillColor = $(0.0000, 0.0000, 0.0000)
      lineColor = $(0.0000, 0.0000, 0.0000)
      pos = (5, -1.25)
      shape = rectangle
      size = (2.5, 7.5)
      startVal [time (s)] = 0.0
      units = deg
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    PolygonComponent top
      fillColor = $(0.0000, 0.0000, 0.0000)
      lineColor = $(0.0000, 0.0000, 0.0000)
      pos = (5, 3.75)
      shape = triangle
      size = (2.5, 2.5)
      startVal [time (s)] = 0.0
      units = deg
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    KeyboardComponent key_resp
      allowedKeys = 'f','j'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine trial
