PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = $[-1,-1,-1]
  expName = untitled
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Routines
  Routine instr
    ImageComponent image
      image = C:\Users\User\Desktop\inst.JPG
      saveStartStop = False
      size = (1920, 1080)
      startVal [time (s)] = 0.0
      units = pix
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    KeyboardComponent resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine trial
    TextComponent text
      letterHeight = 0.1
      pos = (-0.5, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $city1
      units = norm
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    TextComponent text_2
      letterHeight = 0.1
      pos = (0.5, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $city2
      units = norm
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    KeyboardComponent key_resp
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instr
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = C:\Users\User\Desktop\cond.csv
    loopType = random
    nReps = 5
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    conditions:
      [OrderedDict([('city1', 'ロサンゼルス'), ('city2', 'ナッシュビル')]),
      OrderedDict([('city1', 'シカゴ'), ('city2', 'オクラホマシティ')]),
      OrderedDict([('city1', 'ヒューストン'), ('city2', 'エルパソ')]),
      OrderedDict([('city1', 'フェニックス'), ('city2', 'ボストン')]),
      OrderedDict([('city1', 'フィラデルフィア'), ('city2', 'ポートランド')]),
      OrderedDict([('city1', 'サンアントニオ'), ('city2', 'ラスベガス')]),
      OrderedDict([('city1', 'サンディディエゴ'), ('city2', 'デトロイト')]),
      OrderedDict([('city1', 'ダラス'), ('city2', 'メンフィス')]),
      OrderedDict([('city1', 'サンノゼ'), ('city2', 'ルイビル')]),
      OrderedDict([('city1', 'オースティン'), ('city2', 'ボルチモア')]),
      OrderedDict([('city1', 'ジャクソンビル'), ('city2', 'ミルウォーキー')]),
      OrderedDict([('city1', 'フォートワース'), ('city2', 'アルバカーキ')]),
      OrderedDict([('city1', 'コロンバス'), ('city2', 'ツーソン')]),
      OrderedDict([('city1', 'インディアナポリス'), ('city2', 'フレズノ')]),
      OrderedDict([('city1', 'シャーロット'), ('city2', 'サクラメント')]),
      OrderedDict([('city1', 'サンフランシスコ'), ('city2', 'カンザスシティ')]),
      OrderedDict([('city1', 'シアトル'), ('city2', 'メサ')]),
      OrderedDict([('city1', 'デンバー'), ('city2', 'アトランタ')])]
    Routine trial
  LoopTerminator trials
